PsychoPy2experiment version="2023.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'pain_threshold': '38'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [900, 600]
  expName = mpad1_exp
  keyboardBackend = ioHub
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Routines
  Routine blank500
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  Routine welcome_screen
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    CodeComponent stimuli_function
      Code Type = Py
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      Before Experiment:
        from src.experiments.stimuli_function import StimuliFunction
      Begin Experiment:
        minimal_desired_duration = 10 # in seconds
        periods = [67, 20] # [0] is the baseline and [1] the modulation; in seconds
        frequencies = 1./np.array(periods)
        amplitudes = [1, 1.5] # temp range is 2 * sum(amplitudes): max @ VAS 70, min @ VAS 0
        sample_rate = 60
        seed = 463 # use None for random seed
        baseline_temp = 39.2 # @ VAS 35

        stimuli = StimuliFunction(
            minimal_desired_duration,
            frequencies,
            amplitudes,
            sample_rate,
            random_periods=False, # for debugging
            seed=seed
        ).add_baseline_temp(
            baseline_temp
        )#.add_plateaus(
        #    plateau_duration=20,
        #    n_plateaus=4,
        #    add_at_start="random",
        #    add_at_end=True)
    CodeComponent imotions_control
      Code Type = Py
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      Before Experiment:
        from src.experiments.imotions import RemoteControliMotions
      Begin Experiment:
        imotions_control = RemoteControliMotions(
            study = expName,
            participant = expInfo['participant'],
            age = expInfo['age'],
            gender = expInfo['gender']
        )

        imotions_control.connect()
        imotions_control.start_study()
      End Experiment:
        imotions_control.end_study()
        imotions_control.close()
    TextComponent text_welcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Willkommen zum Experiment!
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    TextComponent text_start_exp
      letterHeight = 0.05
      startVal [time (s)] = 1
      text = Das Experiment beginnt mit Tastendruck.
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    KeyboardComponent key_welcome
      allowedKeys = 'j','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine trial_vas_continuous
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    CodeComponent thermoino
      Code Type = Py
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      Before Experiment:
        from src.experiments.thermoino import ThermoinoComplexTimeCourses
      Begin Experiment:
        port = "COM13" # top usb port on the front, use list_com_ports() to find out
        luigi = ThermoinoComplexTimeCourses(
            port=port,
            temp_baseline=32,
            rate_of_rise=5)

        luigi.connect()
        luigi.init_ctc(bin_size_ms=500)
        luigi.create_ctc(
            temp_course=stimuli.wave,
            sample_rate=stimuli.sample_rate,
            rate_of_rise_option="mms_program")
        luigi.load_ctc()
        luigi.trigger()
        luigi.prep_ctc() # TODO: start at VAS 35, not optimal
      Begin Routine:
        luigi.exec_ctc()
      End Routine:
        luigi.set_temp(32)
        luigi.close()
    SliderComponent vas_cont
      durationEstim = 250
      forceEndRoutine = False
      granularity = 0
      initVal = 50
      labels = ("Kein Schmerz","Stärkste vorstellbare Schmerzen")
      letterHeight = 0.05
      pos = (0, -0.1)
      size = (1.0, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = stimuli.duration
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (0, 100)
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    CodeComponent mouse
      Code Type = Py
      Before Experiment:
        import src.experiments.mouse_action as mouse_action
        from src.experiments.mouse_action import pixel_pos_y
      Begin Routine:
        vas_pos_y = pixel_pos_y(
            component_pos = vas_cont.pos,
            win_size = win.size,
            win_pos = win.pos)

        mouse_action.hold()
      Each Frame:
        mouse_action.check(vas_pos_y*1.1) # 1.1 to exactly hit the slider
      End Routine:
        mouse_action.release()
    PolygonComponent fix_cross
      disabled = True
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = stimuli.duration
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    TextComponent text_vas_cont
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = stimuli.duration
      text [set every frame] = $f"Dies ist eine kontinuierliche VAS.\n\nIhr momentaner Schmerz liegt bei: {vas_cont.getMarkerPos():.0f}" if vas_cont.getMarkerPos() is not None else "Dies ist eine kontinuierliche VAS.\n\nIhr momentaner  Schmerz liegt bei: --"
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    CodeComponent imotions_event
      Code Type = Py
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      Before Experiment:
        from src.experiments.imotions import EventRecievingiMotions
        from psychopy import core
      Begin Experiment:
        """ Connect with event recieving API """
        imotions_event = EventRecievingiMotions()
        imotions_event.connect()
        imotions_event.start_study

        # create a clock
        stimuli_clock = core.Clock()
      Begin Routine:
        """ Send discrete marker for stimuli beginning """
        imotions_event.send_marker("stimuli", "Stimuli begins")
        # Start the clock
        stimuli_clock.reset()
      Each Frame:
        """ Stream data for pain rating """
        imotions_event.send_ratings(
            vas_cont.getMarkerPos())

        idx_stimuli = int(stimuli_clock.getTime()*stimuli.sample_rate)
        if idx_stimuli < len(stimuli.wave):
            imotions_event.send_temperatures(stimuli.wave[idx_stimuli])
      End Experiment:
        """ Close event recieving API connection """
        imotions_event.end_study()
        imotions_event.close()
      End Routine:
        """ Send discrete marker for stimuli ending """
        imotions_event.send_marker("stimuli", "Stimuli ends")
  Routine trial_prep
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  Routine goodbye_screen
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    TextComponent text_goodbye
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text = Vielen Dank für Ihre Versuchsteilnahme!
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Flow
  Routine welcome_screen
  Routine trial_vas_continuous
  Routine blank500
  Routine goodbye_screen
